%YAML 1.1
---
# yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
device: CuttlefishCamTrigger
whoAmI: 1408
firmwareVersion: "0.1"
hardwareTargets: "0.0"
registers:
  EnableOutput:
    address: 32
    type: U8
    access: Write
    maskType: Ports
    description: "BitMask to enable/disable each of generated outputs."
  InvertOutputMask:
    address: 33
    type: U8
    access: Write
    maskType: Ports
    description: "BitMask to invert each of the output lines. If a bit is set, the corresponding output will be inverted."
  EnableRisingEdgeEvent:
    address: 34
    type: U8
    access: Write
    description: "If enabled, an event will be dispatched from register RisingEdgeEvent if any of the specified outputs produces a rising edge."
  RisingEdgeEvent:
    address: 35
    type: U8
    access: Event
    description: "An event that is dispatched when any of the enabled outputs produces a rising edge. The event will be dispatched only if EnableRisingEdgeEvent is set."
  Port0FrequencyHz: &frequencyHz
    address: 36
    type: Float
    access: Write
    description: "Frequency of the pulse train generated on Port0. The value is in Hz."
  Port1FrequencyHz:
    <<: *frequencyHz
    address: 38
    description: "Frequency of the pulse train generated on Port1. The value is in Hz."
  Port2FrequencyHz:
    <<: *frequencyHz
    address: 40
    description: "Frequency of the pulse train generated on Port2. The value is in Hz."
  Port3FrequencyHz:
    <<: *frequencyHz
    address: 42
    description: "Frequency of the pulse train generated on Port3. The value is in Hz."
  Port4FrequencyHz:
    <<: *frequencyHz
    address: 44
    description: "Frequency of the pulse train generated on Port4. The value is in Hz."
  Port5FrequencyHz:
    <<: *frequencyHz
    address: 46
    description: "Frequency of the pulse train generated on Port5. The value is in Hz."
  Port6FrequencyHz:
    <<: *frequencyHz
    address: 48
    description: "Frequency of the pulse train generated on Port6. The value is in Hz."
  Port7FrequencyHz:
    <<: *frequencyHz
    address: 50
    description: "Frequency of the pulse train generated on Port7. The value is in Hz."
bitMasks:
  Ports:
    description: "Available ports on the device"
    bits:
      None: 0x0
      Port0: 0x1
      Port1: 0x2
      Port2: 0x4
      Port3: 0x8
      Port4: 0x10
      Port5: 0x20
      Port6: 0x40
      Port7: 0x80
